//StageMovement.mac is macro designed for NIS Elements (Nikon Instruments) and validated with the version 5.21.30 (Build 1489) of the software.
//This macro moves the microscope stage in a meander pattern after pattern has been printed. 

//Hardcoded Variables
//The provided macro creates a patterned array of 5x5 fields of views with a step size equial to the size of the FOV.
//These values should be adjusted accordingly if a pattern array of different size is required.
//Path to the macro for pattern ablation can be either hardcoded, or provided through GUI (the default option).
//To enable the GUI, uncomment the 'GUI for manual selection of patterning macro' below

int PatternLength = 5; //In fields of view
int PatternHeight = 5; //In fields of view
double StepSize = 532.48; //In micrometers
//char PatternAblationMacroPath[256] = "C:\program files\nis-elements\macros\pattern_stimulation.mac";

int i, j; double delta; //Temporary variables

//GUIs to select macro for pattern ablation and pattern map
char PatternAblationMacroPath[256];
global char PatternMapPath[256];
int returned;
//By default NIS macros are saved in 'C:\Program Files\NIS-Elements\Macros\' folder. The path below can be updated to change the default folder for patterning macros 
strcpy(PatternAblationMacroPath, "C:\Program Files\NIS-Elements\Macros\");

returned = SelectFile(PatternAblationMacroPath, "Macro for Pattern Ablation (*.mac;)|*.mac|", 0);
if (returned==TRUE)
{
   WaitText(0, PatternAblationMacroPath);
}
else
{
   WaitText(0, "The user did not select macro for patterning");
}

//Path below can be updated to change the default folder for pattern maps 
strcpy(PatternMapPath, "C:\");
returned = SelectFile(PatternMapPath, "Pattern Map (*.tif;*.tiff)|*.tif;*.tiff|", 0);
if (returned==TRUE)
{
   WaitText(0, PatternMapPath);
}
else
{
   WaitText(0, "The user did not select pattren map");
}

// Microscope control
SetVariableValue("delta", StepSize);

for(i = 1; i <= PatternLength; i = i + 1)
   {
   if(i % 2 == 1)
      {
      for(j = 1; j <= PatternHeight; j = j +1)
         {
         if(j < PatternHeight)
            {
            RunMacro(PatternAblationMacroPath); 
            StgMoveXY(delta, 0, 1);
            }
         else
            {
            RunMacro(PatternAblationMacroPath); 
            StgMoveXY(0, delta, 1);
            }
         }
      }
   else
      {
      for(j = PatternHeight; j >= 1; j = j -1)
         {
         if(j > 1)
            {
            RunMacro(PatternAblationMacroPath); 
            StgMoveXY(-1*delta, 0, 1);
            }
         else
            {
            RunMacro(PatternAblationMacroPath); 
            StgMoveXY(0, delta, 1);
            }
         }
      }
   } 
